datapaths = newArray('/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_10_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_10_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_11_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_10_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_10_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_10_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_10_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_3_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_2_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_8_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_9_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_13_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_7_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_14_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_11_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_6_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_5_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_Go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s/wt/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_4_MMStack_Default_bin10.tif', '/Users/george/Data/10msExposure10s/wt/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_6_MMStack_Default_bin10.tif');
respaths = newArray('/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_10_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_10_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_yoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_yoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_yoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof-yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_11_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_10_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_yoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_174_2022_04_26_HTEndothelial_NonBapta_plate1_yoda1_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_176_2022_04_28_HTEndothelial_NonBapta_plate1_yoda1_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/Yoda/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_10_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_10_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_10_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_3_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_5_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_176_2022_04_28_HTEndothelial_NonBapta_plate2_GoF_2_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_1_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_174_2022_04_26_HTEndothelial_NonBapta_plate2_GoF_8_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_9_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_175_2022_04_27_HTEndothelial_NonBapta_plate2_GoF_13_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_200_2022_09_02_HTEndothelial_NonBAPTA_plate2_GoF_7_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/gof/GB_202_2022_09_02_HTEndothelial_Non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4_2022_04_26_HTEndothelial_NonBapta_plate1_4_MMStack_Default_bin10_locs.csv', '/Users/george/Data/10msExposure10s/wt/GB_175_2022_04_27_HTEndothelial_NonBapta_plate1_6_MMStack_Default_bin10_locs.csv');
for (i=0; i  < datapaths.length; i++) {
	//open(datapaths[i]);
	run("Bio-Formats Importer", "open=" + datapaths[i] +" color_mode=Default rois_import=[ROI manager] split_channels view=Hyperstack stack_order=XYCZT");
	run("Run analysis", "filter=[Wavelet filter (B-Spline)] scale=2.0 order=3 detector=[Local maximum] connectivity=4-neighbourhood threshold=std(Wave.F1) estimator=[PSF: Integrated Gaussian] sigma=1.6 fitradius=3 method=[Weighted Least squares] full_image_fitting=false mfaenabled=false renderer=[Averaged shifted histograms] magnification=5.0 colorizez=false threed=false shifts=2 repaint=50");
	run("Export results", "filepath=["+respaths[i]+"] fileformat=[CSV (comma separated)] sigma=true intensity=true chi2=true offset=true saveprotocol=true x=true y=true bkgstd=true id=true uncertainty=true frame=true");
	//close();
    while (nImages>0) { 
        selectImage(nImages); 
        close(); 
    } 
}